macro "Background Subtraction 30px for 10x (Batch)" {
	   dir = getDirectory("Choose a Directory ");
   setBatchMode(true);
   count = 0;
   countFiles(dir);
   n = 0;
   processFiles(dir);
   //print(count+" files processed");
   
   function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              countFiles(""+dir+list[i]);
          else
              count++;
      }
  }

   function processFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              processFiles(""+dir+list[i]);
          else {
             showProgress(n++, count);
             path = dir+list[i];
             processFile(path);
          }
      }
  }

  function processFile(path) {
       if (endsWith(path, ".tif")) {
           open(path);
           run("Subtract Background...", "rolling=30 stack");
           save(path);
           close();
      }
  }

}
